CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<mutant>.*)_(?P<Site>\d{1,2})_GFP_(?P<pixel_type>.*)_array.npy
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension doesnot istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<mutant>.*)_(?P<Site>\d{1,2})_c(?P<channel>\d{1})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does pixel\_type "cyto")
    Name to assign these images:cytoplasm_pix
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    Select the image type:Binary mask
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    Select the rule criteria:and (metadata does pixel\_type "nucl")
    Name to assign these images:nucleus_pix
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    Select the image type:Binary mask
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    Select the rule criteria:and (metadata does pixel\_type "all")
    Name to assign these images:cell_pix
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    Select the image type:Binary mask
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    Select the rule criteria:and (metadata does channel "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "3")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Site

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:nuclei_obj
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nuclei_obj
    Name the objects to be identified:Cell_obj
    Select the method to identify the secondary objects:Propagation
    Select the input image:cell_pix
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cell_obj
    Select the smaller identified objects:nuclei_obj
    Name the tertiary objects to be identified:Cytoplasm_obj
    Shrink smaller object prior to subtraction?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:GFP
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):1,5
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.3
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
MaskObjects:[module_num:9|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
    Select objects to be masked:Spots
    Name the masked objects:MaskedSpots
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:nucleus_pix
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:10|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
    Select objects to be masked:MaskedSpots
    Name the masked objects:filtered_spots
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:cytoplasm_pix
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:filtered_spots
    Select objects to measure:MaskedSpots

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:filtered_spots
    Select objects to measure:MaskedSpots
    Calculate the Zernike features?:Yes

SaveCroppedObjects:[module_num:13|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
    Objects:filtered_spots
    Directory:Default Output Folder sub-folder|spots/25Q/\g<Site>
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Masks
    Image:None

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|quantification/25Q/\g<Site>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_DNA,Image|FileName_cytoplasm_pix,Image|FileName_GFP,Image|FileName_cell_pix,Image|FileName_nucleus_pix,filtered_spots|Parent_MaskedSpots,filtered_spots|Number_Object_Number,filtered_spots|Intensity_MassDisplacement_GFP,filtered_spots|Intensity_MinIntensity_GFP,filtered_spots|Intensity_StdIntensity_GFP,filtered_spots|Intensity_IntegratedIntensityEdge_GFP,filtered_spots|Intensity_UpperQuartileIntensity_GFP,filtered_spots|Intensity_IntegratedIntensity_GFP,filtered_spots|Intensity_MinIntensityEdge_GFP,filtered_spots|Intensity_MADIntensity_GFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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